---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "E:/opensesame3_plugin_markers/timing_test"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run welcome always
	run new_markers_os3_init always
	run new_parallel_port_trigger_init always
	run new_loop always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop new_loop
	set source table
	set repeat 20
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define markers_os3_init new_markers_os3_init
	set marker_gen_mark_file yes
	set marker_flash_255 no
	set marker_dummy_mode no
	set marker_device_tag marker_device_1
	set marker_device_serial ANY
	set marker_device_addr ANY
	set marker_device ANY
	set marker_crash_on_mark_errors yes
	set description "Initializes Leiden Univ marker device - Markers plugin for OpenSesame 3"

define markers_os3_send new_markers_os3_send
	set marker_value 1
	set marker_reset_to_zero no
	set marker_object_duration 0
	set marker_device_tag marker_device_1
	set description "Sends marker to Leiden Univ marker device - Markers plugin for OpenSesame 3"

define markers_os3_send new_markers_os3_send_1
	set marker_value 0
	set marker_reset_to_zero no
	set marker_object_duration 0
	set marker_device_tag marker_device_1
	set description "Sends marker to Leiden Univ marker device - Markers plugin for OpenSesame 3"

define parallel_port_trigger_init new_parallel_port_trigger_init
	set verbose no
	set port 0x5FF8
	set dummy_mode no
	set description "Parallel Port Trigger: initializes the parallel port device."

define parallel_port_trigger_send new_parallel_port_trigger_send
	set value 1
	set duration_check no
	set duration 0
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_1
	set value 0
	set duration_check no
	set duration 0
	set description "Parallel Port Trigger: send trigger."

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run send_marker_display always
	run new_markers_os3_send always
	run new_parallel_port_trigger_send always
	run wait_100ms always
	run new_markers_os3_send_1 always
	run new_parallel_port_trigger_send_1 always
	run wait_10ms always

define sketchpad send_marker_display
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="sending markers" x=0 y=0 z_index=0

define advanced_delay wait_100ms
	set jitter_mode Uniform
	set jitter 0
	set duration 100
	set description "Waits for a specified duration"

define advanced_delay wait_10ms
	set jitter_mode Uniform
	set jitter 0
	set duration 10
	set description "Waits for a specified duration"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

